PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'sex': '001', 'age': '', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0.992,0.992,0.992]
  expName = reactive_intentional_encoding_looped
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Routines
  Routine trial
    ImageComponent imageA
      image [set every frame] = $image_a
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent b_image
      image [set every frame] = $correct_image
      pos = (.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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  Routine test
    TextComponent afc_text
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Select the correct image
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    ImageComponent image_4
      image [set every frame] = $location1
      pos [set every frame] = (-.5, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent image_9
      image [set every frame] = $location2
      pos [set every frame] = (0, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent image_10
      image [set every frame] = $location3
      pos [set every frame] = (0.5, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent j_key_test
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (-0.5, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every frame] = J
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    TextComponent K_key_test
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = K
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    TextComponent L_key_test
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.5, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = L
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    ImageComponent imagea
      image [set every repeat] = $ImageA
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3
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    TextComponent Feedback
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3
      text = Re-study the correct pairs
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    KeyboardComponent retrieval_resp
      allowedKeys = 'y','n','left','right','space', 'j', 'k', 'l'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
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    ImageComponent correctImage
      image [set every repeat] = $ImageB
      pos = (0.2, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3
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  Routine feedback
  Routine Instruction_06
    TextComponent text_10
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.5
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      text:
        Get ready! Each pair of images will only last on the screen for a few sceonds, so pay attention!
    TextComponent text_11
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = Press space bar when you're ready to start the game!
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    ImageComponent image_7
      image [set every frame] = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent image_8
      image = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instructions_intentional_encoding
    TextComponent text
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_1x, position_1y)
      saveStartStop = False
      startVal [time (s)] = 0.05
      text [set every repeat] = $instructions1
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    TextComponent instructions_text2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_2x, position_2y)
      saveStartStop = False
      startVal [time (s)] = .05
      text [set every repeat] = $Instructions2
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    KeyboardComponent response
      allowedKeys = 'y','n','left','right','space', 'j', 'f'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .05
      store = first key
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    ImageComponent image1
      image [set every frame] = $Image1
      pos [set every frame] = (0.25, 0)
      saveStartStop = False
      size [set every frame] = (0.3, 0.3)
      startVal [time (s)] = .05
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    ImageComponent image2
      image [set every frame] = $Image2
      pos [set every frame] = (-.25, 0)
      saveStartStop = False
      size [set every frame] = (0.3, 0.3)
      startVal [time (s)] = 0.05
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    TextComponent J_press_instructions
      color = black
      font = Helvetica
      letterHeight = 0.04
      pos = (0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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    TextComponent F_key_instruct
      color = black
      font = Helvetica
      letterHeight = 0.04
      pos [set every repeat] = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $K_key
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    ImageComponent arrow
      image [set every repeat] = $Image3
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    TextComponent yes_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos [set every repeat] = (-0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $yes_text
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    TextComponent no_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos [set every repeat] = (0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $no_text
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  Routine instructions_retreival_testing
    TextComponent text_5
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_1x, position_1y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    TextComponent text_8
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_2x, position_2y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space','l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
      store = first key
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    ImageComponent image
      image [set every repeat] = $Image1
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $Image2
      pos = (0.52, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $Image3
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $Image4
      pos [set every repeat] = (-.52, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent K
      color [set every repeat] = black
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $K_key
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    TextComponent L
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0.5, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_key
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    TextComponent J
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (-0.5, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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  Routine instructions_retreival_testing1
    TextComponent text_3
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_1x, position_1y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    TextComponent text_4
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_2x, position_2y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions2
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    ImageComponent image_3
      image [set every repeat] = $Image1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.05
      store = first key
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  Routine instruction_intentional_encoding_post_practice
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Great job with the practice!

        When you are ready to start the real game press space. If you want more practice, press 'r' to re-do the practice.
  Routine real_intentional_encoding
    ImageComponent image_pair1
      image [set every repeat] = $image_a
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent image_pair2
      image [set every repeat] = $correct_image
      pos = (.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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  Routine intructions_post_practice_intentional_encoding
    TextComponent text_9
      color = black
      font = helvetica
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Great job! Now that you have had practice, you can start the real game. Remember to memorize that the two images go together. It is important you remember because your memory will be tested later. Press space to start the real thing! 
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startEstim = 1
      startVal [time (s)] = 0.5
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  Routine practice_retrieval_after_encoding
    ImageComponent image_a_practice
      image [set every repeat] = $image_a
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    TextComponent afc_test_practice
      color = black
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      text = Select the correct image
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    ImageComponent location1_practice
      image [set every repeat] = $location1
      pos = (-.4, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
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    ImageComponent location2_practice
      image [set every repeat] = $location2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
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    ImageComponent location3_practice
      image [set every repeat] = $location3
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
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    TextComponent j_key_test_practice
      color = black
      font = helvetica
      letterHeight = 0.03
      pos = (-0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      text = J
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    TextComponent K_key_practice
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      text [set every repeat] = K
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    TextComponent L_key_practice
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0.4, -.25)
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      text [set every repeat] = L
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    ImageComponent image_11
      image [set every repeat] = $image_a
      pos [set every repeat] = (-0.2, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    ImageComponent image_12
      image [set every repeat] = $correct_image
      pos [set every repeat] = (.2, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    TextComponent text_7
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, .20)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text [set every repeat] = Think of the image pair
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    TextComponent text_17
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
      text [set every repeat] = Re-study the correct pairs
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    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space', 'j', 'k', 'l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      store = first key
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  Routine post_practice_retrieval_intructions
  Routine post_retrievalpractice_instructions
    TextComponent post_retreival_practice_intructions
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Great job! Now that you have finished the practice, we will start the real thing. When you are ready to start the memory test, press space!
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine post_test1_instructions
  Routine pre_intentional_encoding4
    TextComponent text_12
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.04
      text = Great job. Keep those image pairs in mind because you will be tested again at the end the experiment. For now, you will learn more image pairs. When you are ready to learn more pairs, press the space bar.
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = first key
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  Routine intentional_encoding_4
    ImageComponent image_pair1_2
      image [set every repeat] = $ImageA
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent image_pair2_2
      image [set every repeat] = $ImageB
      pos = (.25, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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  Routine instruct_retrieval4
    TextComponent text_13
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text =  When you are ready to start the memory test, press space bar. 
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine retrieval4
    TextComponent afc_text_2
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = Select the correct image
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    ImageComponent image_13
      image [set every repeat] = $location1
      pos [set every repeat] = (-.4, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent image_14
      image [set every repeat] = $location2
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent image_15
      image [set every repeat] = $location3
      pos [set every repeat] = (0.4, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent j_key_test_2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (-0.4, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = J
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    TextComponent L_key_test_2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight = 0.03
      pos = (0.4, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = L
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    TextComponent K_key_test_2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = K
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    ImageComponent correct_image__a
      image [set every repeat] = $ImageA
      pos [set every repeat] = (-0.2, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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    ImageComponent correct_image2_2
      image [set every repeat] = $ImageB
      pos [set every repeat] = (0.2, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
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    TextComponent Feedback_2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
      text [set every repeat] = Re-study the correct pairs
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    KeyboardComponent retrieval_test_resp
      allowedKeys [set every repeat] = 'y','n','left','right','space', 'j', 'k', 'l', 'J', 'K', 'L'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
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  Routine final_ab_retrieval_test_instruct
    TextComponent text_15
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now we will test your memory for ALL of the images that you have learned. You will be presented with the correct impair pair after you have made your response. Re-study this. Your memory will be tested later. When you are ready, press space bar to start.
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      store = first key
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  Routine instructions_ac_encoding
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Great job! In the next task, you will see two images. You will be asked to determine whether the images weigh more than a full water bottle together. For example, you might see two images, like below. And you will respond yes or no, using the 'j' and 'k' keys. 
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  Routine instructions_for_incidental_encoding
  Routine sustained_attention_arrows_practice
    ImageComponent image_16
      image [set every repeat] = $Arrow_direction
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    KeyboardComponent arrows_resp
      allowedKeys [set every repeat] = 'j', 'f', 'J', 'F'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent F_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = F
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    TextComponent J_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = J
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    TextComponent left_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.3, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = left
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    TextComponent right_press
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.3, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = right
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  Routine fixation_2
    TextComponent text_31
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_incidental_encoding
    ImageComponent incidental_image1_
      image [set every repeat] = $incidental_image1
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent incidental_encoding_resp
      allowedKeys = 'y','n','left','right','space', 'j', 'f'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      store = first key
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    TextComponent text_18
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = F
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    TextComponent text_19
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = J
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    TextComponent text_20
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = Yes
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    TextComponent text_21
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = No
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    ImageComponent incidental_image2_
      image [set every repeat] = $incidental_image2
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine small_dog_question
    TextComponent text_22
      color = black
      font = helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = Do the following images, together, weigh more than a small dog?
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  Routine pre_instruct_sustainedAttention
    TextComponent text_2
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You are now finished with the practice. When you are ready to start the real thing, press space. 
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    KeyboardComponent key_resp_14
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine incidental_encoding_real
    ImageComponent image_A
      image [set every repeat] = $ImageA
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    ImageComponent image_c
      image [set every repeat] = $ImageC
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent key_resp_15
      allowedKeys = 'y','n','left','right','space', 'j', 'f', 'J', 'F'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      store = first key
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    TextComponent text_23
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = F
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    TextComponent text_24
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = J
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    TextComponent text_25
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = Yes
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    TextComponent text_26
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = No
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  Routine sustained_attention_arrows_real
  Routine pre_instruct_final_memory
    TextComponent text_14
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    TextComponent pressspace
      color [set every repeat] = black
      font = Helvetica
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue
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    KeyboardComponent key_resp_16
      allowedKeys = 'y','n','left','right','space', 'j', 'f'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image_17
      image [set every repeat] = $Image1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent Jkey
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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    TextComponent F_key
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $K_key
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    TextComponent oldText
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.20, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $yes_text
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    TextComponent newtext
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $no_text
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  Routine practice_abc_memory_test
    ImageComponent imageabc
      image [set every repeat] = $Image
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent primed_memory_resp
      allowedKeys [set every repeat] = 'y','n','left','right','space', 'j', 'f', 'J', 'F'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent Jkey_2
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = J
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    TextComponent F_key_2
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = F
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    TextComponent old
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.20, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = old
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    TextComponent newtext_2
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.2, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = new
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  Routine pre_instruction_real_abc_final_memory
    TextComponent text_27
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Great job! You are now finished the practice. When you are ready to start the real thing, press space!
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    KeyboardComponent key_resp_18
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    TextComponent text_28
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You are now finished the game. Congratulations. Press space to exit.
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    KeyboardComponent exit
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine questionairre
    TextComponent questioniarre
      color = black
      font = Helvetica
      letterHeight = .025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    KeyboardComponent questionairre_resp
      allowedKeys [set every repeat] = 'y','n','left','right','space', 'j', 'k', 'l', '0','1','2','3','4','5','6','7','8','9', 'n', 'p', 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text_29
      color = black
      font = Helvetica
      letterHeight = 0.025
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions2
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    ImageComponent image_18
      image [set every repeat] = $Image1
      pos = (-0.1, 0.13)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_19
      image [set every repeat] = $Image2
      pos = (0.1, 0.13)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_20
      image [set every repeat] = $Image3
      pos = (-0.1, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_21
      image [set every repeat] = $Image4
      pos = (0.1, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent A_txt1
      color = blue
      font = Helvetica
      letterHeight = 0.02
      pos = (-0.1, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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    TextComponent B_text
      color = blue
      font = Helvetica
      letterHeight = 0.02
      pos = (0.1, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $K_key
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    TextComponent a_text2
      color = blue
      font = Helvetica
      letterHeight = 0.02
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $J_key
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    TextComponent C_text
      color = blue
      font = Helvetica
      letterHeight = 0.02
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_key
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  Routine surveytool
  Routine questionairre2
    TextComponent text_30
      color = black
      font = Helvetica
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    TextComponent text_32
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (-0.35, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
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    TextComponent text_33
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0.35, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text2
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    KeyboardComponent questionairre_resp2
      allowedKeys = 'y','n','left','right','space', '1','2','3','4','5','6','7','8','9','10', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 10
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine expParam
    CodeComponent globalVars
      Code Type = Both
      Begin JS Routine:
        window.intentional_encoding_path = 'trialorder/' + String(expInfo['participant'] % 4) + '_intentional_encoding.csv';
        window.intentional_encoding_test_path = 'trialorder/' + String(expInfo['participant'] % 4) + '_intentional_encoding_test.csv';
        window.intentional_encoding_test_final_path = 'trialorder/' + String(expInfo['participant'] % 4) + '_intentional_encoding_test_final.csv';
        window.priming_recognition_path = 'trialorder/' + String(expInfo['participant'] % 4) + '_priming_recognition_test.csv';
      Begin Routine:
        intentional_encoding_path = ('trialorder/' + str(int(expInfo['participant']) % 4) + '_intentional_encoding.csv')
        intentional_encoding_test_path = ('trialorder/' + str(int(expInfo['participant']) % 4) + '_intentional_encoding_test.csv')
        intentional_encoding_test_final_path = ('trialorder/' + str(int(expInfo['participant']) % 4) + '_intentional_encoding_test_final.csv')
        priming_recognition_path = ('trialorder/' + str(int(expInfo['participant']) % 4) + '_priming_recognition_test.csv')
  Routine think_image_pair
    TextComponent instruct_text_3
      color [set every repeat] = black
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = (0, .20)
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      text [set every repeat] = Think of the image pair
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    ImageComponent a_image_retrieve_3
      image [set every repeat] = $ImageA
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
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  Routine instructions_first
    TextComponent text_34
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_1x, position_1y)
      saveStartStop = False
      startVal [time (s)] = 0.05
      text [set every repeat] = $instructions1
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    TextComponent instructions_text2_2
      color [set every repeat] = black
      font [set every repeat] = Helvetica
      letterHeight [set every repeat] = 0.03
      pos [set every repeat] = $(position_2x, position_2y)
      saveStartStop = False
      startVal [time (s)] = .05
      text [set every repeat] = $Instructions2
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    KeyboardComponent response_2
      allowedKeys = 'y','n','left','right','space', 'j', 'f'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .05
      store = first key
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    ImageComponent image1_2
      image [set every repeat] = $Image1
      pos [set every repeat] = (0.25, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = .05
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    ImageComponent image2_2
      image [set every repeat] = $Image2
      pos [set every repeat] = (-.25, 0)
      saveStartStop = False
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.05
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Flow
  Routine expParam
  LoopInitiator trials_24 loopType="TrialHandler"
    conditionsFile = trialorder/instructions_first.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('instructions1', 'Welcome to the memory game! In this game, you must learn which images go together.'), ('Instructions2', 'Press space to continue!'), ('Image1', None), ('Image2', None), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)]),
      OrderedDict([('instructions1', 'You will see two images on the left and right side of the screen, like this.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)]),
      OrderedDict([('instructions1', 'Your job is to remember that these images go together. '), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)]),
      OrderedDict([('instructions1', 'To help memory, you can link the images through a story. For example, jessica alba likes this old book.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('position_1x', 0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4)])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
    Routine instructions_first
    Routine fixation_2
  LoopTerminator trials_24
  Routine fixation_2
  LoopInitiator practice_trials_intentional_encoding loopType="TrialHandler"
    conditionsFile = trialorder/test_practice.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('trial_in_list', 1), ('image_a', 'images/glassBall.jpg'), ('location1', 'images/epcot_center_a.jpg'), ('correct_category_pair', 'object-scene'), ('location2', 'images/beetle.png'), ('location3', 'images/statue_of_liberty.jpg'), ('correct_image', 'images/epcot_center_a.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 2), ('image_a', 'images/giftbow01.png'), ('location1', 'images/willie_nelson_b.jpg'), ('correct_category_pair', 'object-face'), ('location2', 'images/electricoutlet.png'), ('location3', 'images/chick.jpg'), ('correct_image', 'images/willie_nelson_b.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 3), ('image_a', 'images/gazebo_wooden.png'), ('location1', 'images/ray_romano.jpg'), ('correct_category_pair', 'object-face'), ('location2', 'images/john_stamos.jpg'), ('location3', 'images/natalie_portman.jpg'), ('correct_image', 'images/natalie_portman.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 4), ('image_a', 'images/helicopter.jpg'), ('location1', 'images/bench_park.png'), ('correct_category_pair', 'object-face'), ('location2', 'images/bird_parrot.png'), ('location3', 'images/julia_louis_dreyfus.jpg'), ('correct_image', 'images/julia_louis_dreyfus.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')])]
    Routine real_intentional_encoding
    Routine fixation_2
  LoopTerminator practice_trials_intentional_encoding
  Routine intructions_post_practice_intentional_encoding
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = $intentional_encoding_path
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine intentional_encoding_4
    Routine fixation_2
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 8:11
    conditionsFile = trialorder/instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('instructions1', 'Welcome to the memory game! In this game, you must learn which images go together.'), ('Instructions2', 'Press space to continue!'), ('Image1', None), ('Image2', None), ('Image3', None), ('Image_4', None), ('position_1x', 0.0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', ' '), ('K_key', ' '), ('L_key', ' '), ('yes_text', ' '), ('no_text', ' ')]),
      OrderedDict([('instructions1', 'You will see two images on the left and right side of the screen, like this.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0.0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', ' '), ('K_key', ' '), ('L_key', ' '), ('yes_text', ' '), ('no_text', ' ')]),
      OrderedDict([('instructions1', 'Your job is to remember that these images go together. '), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0.0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', ' '), ('K_key', ' '), ('L_key', ' '), ('yes_text', ' '), ('no_text', ' ')]),
      OrderedDict([('instructions1', 'You could link them through a story. For example, jessica alba likes books.'), ('Instructions2', 'Press space to continue!'), ('Image1', 'instruction_images/jessica_alba.jpg'), ('Image2', 'instruction_images/oldBook.png'), ('Image3', None), ('Image_4', None), ('position_1x', 0.0), ('position_1y', 0.3), ('position_2x', 0.0), ('position_2y', -0.4), ('J_key', ' '), ('K_key', ' '), ('L_key', ' '), ('yes_text', ' '), ('no_text', ' ')])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
    Routine instructions_retreival_testing1
  LoopTerminator trials_4
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 11:16
    conditionsFile = trialorder/instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
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    Routine instructions_retreival_testing
  LoopTerminator trials_2
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = trialorder/test_practice.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('trial_in_list', 1), ('image_a', 'images/giftbow01.png'), ('location1', 'images/willie_nelson_b.jpg'), ('correct_category_pair', 'object-face'), ('location2', 'images/electricoutlet.png'), ('location3', 'images/chick.jpg'), ('correct_image', 'images/willie_nelson_b.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 2), ('image_a', 'images/globe.png'), ('location1', 'images/earrings_dangling.jpg'), ('correct_category_pair', 'object-scene'), ('location2', 'images/wrigley_field_b.jpg'), ('location3', 'images/barrel.jpg'), ('correct_image', 'images/wrigley_field_b.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 3), ('image_a', 'images/glassBall.jpg'), ('location1', 'images/westminster_abbey_a.jpg'), ('correct_category_pair', 'object-scene'), ('location2', 'images/beetle.png'), ('location3', 'images/statue_of_liberty.jpg'), ('correct_image', 'images/westminster_abbey_a.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')]),
      OrderedDict([('trial_in_list', 4), ('image_a', 'images/gazebo_wooden.png'), ('location1', 'images/ray_romano.jpg'), ('correct_category_pair', 'object-face'), ('location2', 'images/john_stamos.jpg'), ('location3', 'images/natalie_portman.jpg'), ('correct_image', 'images/natalie_portman.jpg'), ('List', 0), ('trial_num', 0), ('block', 'practice')])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
    Routine practice_retrieval_after_encoding
  LoopTerminator trials_5
  Routine post_retrievalpractice_instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = $intentional_encoding_test_path
    loopType = sequential
    nReps = 0
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    Routine think_image_pair
    Routine fixation_2
    Routine retrieval4
  LoopTerminator trials_3
  Routine pre_intentional_encoding4
  LoopInitiator trials_6 loopType="TrialHandler"
    Selected rows = 12:24
    conditionsFile = $intentional_encoding_path
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine intentional_encoding_4
    Routine fixation_2
  LoopTerminator trials_6
  Routine instruct_retrieval4
  LoopInitiator trials_7 loopType="TrialHandler"
    Selected rows = 12:24
    conditionsFile = $intentional_encoding_test_path
    loopType = sequential
    nReps = 0
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    Routine think_image_pair
    Routine fixation_2
    Routine retrieval4
  LoopTerminator trials_7
  Routine pre_intentional_encoding4
  LoopInitiator trials_8 loopType="TrialHandler"
    Selected rows = 24:36
    conditionsFile = $intentional_encoding_path
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine intentional_encoding_4
    Routine fixation_2
  LoopTerminator trials_8
  Routine instruct_retrieval4
  LoopInitiator trials_9 loopType="TrialHandler"
    Selected rows = 24:36
    conditionsFile = $intentional_encoding_test_path
    loopType = sequential
    nReps = 0
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    Routine think_image_pair
    Routine fixation_2
    Routine retrieval4
  LoopTerminator trials_9
  Routine pre_intentional_encoding4
  LoopInitiator trials_10 loopType="TrialHandler"
    Selected rows = 36:48
    conditionsFile = $intentional_encoding_path
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine intentional_encoding_4
    Routine fixation_2
  LoopTerminator trials_10
  Routine instruct_retrieval4
  LoopInitiator trials_11 loopType="TrialHandler"
    Selected rows = 36:48
    conditionsFile = $intentional_encoding_test_path
    loopType = sequential
    nReps = 0
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    Routine think_image_pair
    Routine fixation_2
    Routine retrieval4
  LoopTerminator trials_11
  Routine final_ab_retrieval_test_instruct
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = $intentional_encoding_test_final_path
    loopType = random
    nReps = 0
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    Routine think_image_pair
    Routine fixation_2
    Routine retrieval4
  LoopTerminator trials_12
  LoopInitiator trials_13 loopType="TrialHandler"
    Selected rows = 16:22
    conditionsFile = trialorder/instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine instructions_intentional_encoding
  LoopTerminator trials_13
  LoopInitiator trials_15 loopType="TrialHandler"
    conditionsFile = trialorder/phase2_practice.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Arrow_direction', 'images/right.png'), ('correct_answer', 'j'), ('incidental_image1', 'instruction_images/bug_ladybug.png'), ('incidental_image2', 'instruction_images/button_plastic.png')]),
      OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/antlers.jpg'), ('incidental_image2', 'instruction_images/oldBook.png')]),
      OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/alpaca_fo.jpg'), ('incidental_image2', 'instruction_images/cake_cheese.png')])]
    Routine small_dog_question
    Routine fixation_2
    Routine practice_incidental_encoding
    LoopInitiator trials_14 loopType="TrialHandler"
      conditionsFile = trialorder/phase2_practice.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Arrow_direction', 'images/right.png'), ('correct_answer', 'j'), ('incidental_image1', 'instruction_images/bug_ladybug.png'), ('incidental_image2', 'instruction_images/button_plastic.png')]),
        OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/antlers.jpg'), ('incidental_image2', 'instruction_images/oldBook.png')]),
        OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/alpaca_fo.jpg'), ('incidental_image2', 'instruction_images/cake_cheese.png')])]
      Routine sustained_attention_arrows_practice
      Routine fixation_2
    LoopTerminator trials_14
  LoopTerminator trials_15
  Routine pre_instruct_sustainedAttention
  LoopInitiator trials_18 loopType="TrialHandler"
    conditionsFile = trialorder/phase2_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Arrow_direction', 'images/right.png'), ('correct_answer', 'j'), ('incidental_image1', 'instruction_images/bug_ladybug.png'), ('incidental_image2', 'instruction_images/button_plastic.png'), ('Time', 3)]),
      OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/antlers.jpg'), ('incidental_image2', 'instruction_images/oldBook.png'), ('Time', 3)]),
      OrderedDict([('Arrow_direction', 'images/left.png'), ('correct_answer', 'f'), ('incidental_image1', 'instruction_images/alpaca_fo.jpg'), ('incidental_image2', 'instruction_images/cake_cheese.png'), ('Time', 3)]),
      OrderedDict([('Arrow_direction', 'images/right.png'), ('correct_answer', 'j'), ('incidental_image1', 'instruction_images/bug_ladybug.png'), ('incidental_image2', 'instruction_images/button_plastic.png'), ('Time', 3)])]
    Routine sustained_attention_arrows_practice
    Routine fixation_2
  LoopTerminator trials_18
  LoopInitiator trials_17 loopType="TrialHandler"
    conditionsFile = $intentional_encoding_test_path
    loopType = sequential
    nReps = 1
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    Routine small_dog_question
    Routine fixation_2
    Routine incidental_encoding_real
    LoopInitiator trials_16 loopType="TrialHandler"
      conditionsFile = trialorder/phase2_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine sustained_attention_arrows_practice
      Routine fixation_2
    LoopTerminator trials_16
  LoopTerminator trials_17
  Routine fixation_2
  LoopInitiator trials_19 loopType="TrialHandler"
    Selected rows = 22:26
    conditionsFile = trialorder/instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine pre_instruct_final_memory
  LoopTerminator trials_19
  LoopInitiator trials_20 loopType="TrialHandler"
    conditionsFile = trialorder/final_acb_memory_test_practice.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Image', 'images/giftbow01.png')]),
      OrderedDict([('Image', 'images/globe.png')]),
      OrderedDict([('Image', 'images/glassBall.jpg')]),
      OrderedDict([('Image', 'images/gazebo_wooden.png')]),
      OrderedDict([('Image', 'images/helicopter.jpg')]),
      OrderedDict([('Image', 'images/willie_nelson_b.jpg')]),
      OrderedDict([('Image', 'images/earrings_dangling.jpg')]),
      OrderedDict([('Image', 'images/westminster_abbey_a.jpg')]),
      OrderedDict([('Image', 'images/ray_romano.jpg')]),
      OrderedDict([('Image', 'images/bench_park.png')]),
      OrderedDict([('Image', 'images/electricoutlet.png')]),
      OrderedDict([('Image', 'images/wrigley_field_b.jpg')]),
      OrderedDict([('Image', 'images/beetle.png')]),
      OrderedDict([('Image', 'images/john_stamos.jpg')]),
      OrderedDict([('Image', 'images/bird_parrot.png')])]
    Routine practice_abc_memory_test
    Routine fixation_2
  LoopTerminator trials_20
  Routine fixation_2
  Routine pre_instruction_real_abc_final_memory
  LoopInitiator trials_21 loopType="TrialHandler"
    conditionsFile = $priming_recognition_path
    loopType = sequential
    nReps = 1
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    Routine practice_abc_memory_test
    Routine fixation_2
  LoopTerminator trials_21
  LoopInitiator trials_22 loopType="TrialHandler"
    Selected rows = 26:30
    conditionsFile = trialorder/instructions.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine questionairre
  LoopTerminator trials_22
  LoopInitiator trials_23 loopType="TrialHandler"
    conditionsFile = trialorder/questionairre2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions1', 'What proportion of the arrow task were you thinking about the earlier image pairs after seeing the new image pair on a scale of 1 to 10. '), ('text1', 'Never'), ('text2', 'The entire time')]),
      OrderedDict([('instructions1', 'How bored were you during the arrow task? '), ('text1', 'Not bored at all'), ('text2', 'extremely bored')]),
      OrderedDict([('instructions1', 'How interested were you in the task? '), ('text1', 'not interested at all'), ('text2', 'very interested')]),
      OrderedDict([('instructions1', 'How often did your mind drift away during the arrow task to your other daily concerns or daydreams? '), ('text1', 'Never'), ('text2', 'The entire time')]),
      OrderedDict([('instructions1', 'How motivated were you to do well on the memory task? '), ('text1', 'Not motivated at all'), ('text2', 'Very motivated')]),
      OrderedDict([('instructions1', 'How much stress did you experience this week? '), ('text1', 'Not stress'), ('text2', 'Extremely stressed')]),
      OrderedDict([('instructions1', 'How often did you think about your stressful experiences during the arrow task? '), ('text1', 'Not at all'), ('text2', 'The entire time')]),
      OrderedDict([('instructions1', 'How many hours per day you spend on social media rounded to the nearest hour.'), ('text1', '1 or less than 1'), ('text2', '10 or more than 10')])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
    Routine questionairre2
  LoopTerminator trials_23
  Routine end
